begin parameters
  1 L0   1
  2 R0   1
  3 A0   5
  4 kp1  0.5
  5 km1  0.1
  6 kp2  1.1
  7 km2  0.1
  8 p1  10
  9 d1   5
 10 kpA  1e1
 11 kmA  0.02
end parameters

begin molecular types
egfr(r,r)
end molecular types

begin species
end species


begin reaction rules

# Ligand binding (L+R)
# Note: specifying r in R here means that the r component must not
#       be bound.  This prevents dissociation of ligand from R
#       when R is in a dimer.
  1  L(r) + R(l,d) <-> L(r!1).R(l!1,d) kp1, km1
end reaction rules

begin observables
Molecules     Dimers		egfr()
end observables


generate_network();
writeSBML();
simulate_ode({t_end=>50,n_steps=>20});

# Print concentratons at unevenly spaced times (array-valued parameter)
#simulate_ode({sample_times=>[1,10,100]});
